PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'exposure': '[1, 2]', 'test': '[1, 2]'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = inmix-sl-inference
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine instructions
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    CodeComponent setup_code
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Experiment:
        # random seed
        random.seed(45)

        # get current conditions
        exposure_cond = expInfo['exposure']
        test_cond = expInfo['test']

        # set up experiment params
        num_images = 109        # number of images to choose from
        num_stim = 24           # number of images to call in
        num_groups = 6          # number of tetrads
        num_blocks = 3          # number of blocks
        num_rep = 20 #50            # number of repetitions for each group
        num_loop_rep = num_rep * num_groups
        percent_1back = 0.1     # probability of 1 back
        num_1backs_each_pair = int(num_rep*percent_1back*2)
        print(num_1backs_each_pair)
        p1_1back = [1,0]
        p2_1back = [0,1]

        # define stimuli parameters
        image_size = [0.25, 0.25]
        fix_size = [0.01,0.01]
        fix_line_width = 2


        # randomize fractal options
        fract_opts = random.sample(list(range(1, num_images+1)), num_images)

        chosen_fract = []

        # choose the first 24
        for num in (fract_opts[0:num_stim]):
            chosen_fract.append(f"{num:03}")

        print(chosen_fract)
        fract_groups = []

        for i in range(0, num_stim, num_stim//num_groups):
            inter = num_stim//num_groups
            fract_groups.append(chosen_fract[i:(i + inter)])

        print(fract_groups)

        AB_pairs = []
        BC_pairs = []
        CD_pairs = []
        AC_pairs = []
        BD_pairs = []
        AD_pairs = []

        for i in range(len(fract_groups)):
            curr_group = fract_groups[i]
        for i in range(len(fract_groups)):
            curr_group = fract_groups[i]
            AB_pairs.append([curr_group[0], curr_group[1]])
            BC_pairs.append([curr_group[1], curr_group[2]])
            CD_pairs.append([curr_group[2], curr_group[3]])
            AC_pairs.append([curr_group[0], curr_group[2]])
            BD_pairs.append([curr_group[1], curr_group[3]])
            AD_pairs.append([curr_group[0], curr_group[3]])


        def send_back(value, number, lst):
            idx = len(lst)-2
            for _ in range(number):
                while lst[idx] == value or lst[idx-1] == value:
                    idx -= 1
                lst.insert(idx, value)


        def shuffle_without_doubles(nb_values, repeats):
            population = list(range(nb_values))
            weights = [repeats] * nb_values
            out = []
            prev = None
            for i in range(nb_values * repeats):
                if prev is not None:
                    # remove prev from the list of possible choices
                    # by turning its weight temporarily to zero
                    old_weight = weights[prev]
                    weights[prev] = 0

                try:
                    chosen = random.choices(population, weights)[0]
                except ValueError:
                    # We are here because all of our weights are 0,
                    # which means that all is left to choose from
                    # is old_weight times the previous value
                    print("prev", prev)
                    print("old_weight", old_weight)
                    print("out", out)
                    send_back(prev, old_weight, out)
                    break

                out.append(chosen)
                weights[chosen] -= 1
                if prev is not None:
                    # restore weight
                    weights[prev] = old_weight
                prev = chosen
            return out

        def make_unique_list(list1):
            list2 = list1[:]
            random.shuffle(list2)

            for i in range(len(list2)):
                if list2[i] == list1[i]:
                    # Find a position to swap where there's no conflict
                    for j in range(len(list2)):
                        if j != i and list2[j] != list1[i] and list2[i] != list1[j]:
                            list2[i], list2[j] = list2[j], list2[i]
                            break
            return list2
    KeyboardComponent instruct_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instruct_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = $instruct_resp
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      text:
        Welcome!
        In this experiment you will see a sequence of images.
        You will see one image at a time.
        For each image, please judge whether it is the same as the previous image you just saw.
        If the image is the SAME as the previous one, press "space".
        If the colour is DIFFERENT from the previous one, press "z".
        Example: A--B("z")--B("/")--C("z")
        Please respond as ACCURATELY and as FAST as possible.
        Press space bar to start.'
  Routine fix
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    PolygonComponent fixation_fb
      fillColor = white
      lineColor = black
      lineWidth = fix_line_width
      shape = circle
      size = fix_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
      units = height
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  Routine pair1_disp
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    CodeComponent pair1_trial_code
      Code Type = Auto->JS
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      Begin Routine:
        space_press = False
      Each Frame:
        if (pair1_resp.keys == "space") & (pair1_resp.status == STARTED):
            if not space_press:
                space_press = True
                space_press = t
                pair1_fix.fillColor = "white"
                pair1_fix.lineColor = "black"
            else:
                space_press = t
        if space_press and t - space_press > .15:
            space_press = False
            pair1_fix.fillColor = "black"
            pair1_fix.lineColor = "white"
      End Routine:
        thisExp.addData('pair1', ('stim_' + pair1_stim))
        thisExp.addData('trial_count_pair1', trial_count)
        thisExp.addData('trial_1backcount_pair1', trial_count_1back)
        trial_count += 1
        trial_count_1back += 1
    ImageComponent pair1_image
      image [set every repeat] = $'images/stim_' + pair1_stim + '.png'
      size = image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent pair1_resp
      allowedKeys [set every repeat] = 'space','None'
      correctAns = 'None'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.75
      storeCorrect = True
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    PolygonComponent pair1_fix
      fillColor [set every repeat] = black
      lineColor [set every repeat] = white
      lineWidth = fix_line_width
      nVertices = 0
      shape = circle
      size = fix_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine pair2_disp
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    CodeComponent pair2_trial_code
      Code Type = Auto->JS
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      Begin Routine:
        space_press = False
      Each Frame:
        if (pair2_resp.keys == "space") & (pair2_resp.status == STARTED):
            if not space_press:
                space_press = True
                space_press = t
                pair2_fix.fillColor = "white"
                pair2_fix.lineColor = "black"
            else:
                space_press = t
        if space_press and t - space_press > .15:
            space_press = False
            pair2_fix.fillColor = "black"
            pair2_fix.lineColor = "white"
      End Routine:
        thisExp.addData('pair2', ('stim_' + pair2_stim))
        thisExp.addData('trial_count_pair2', trial_count)
        thisExp.addData('trial_1backcount_pair2', trial_count_1back)
        trial_count += 1
        trial_count_1back += 1
    ImageComponent pair2_image
      image [set every repeat] = $'images/stim_' + pair2_stim + '.png'
      size = image_size
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent pair2_resp
      allowedKeys [set every repeat] = 'space','None'
      correctAns = 'None'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.75
      storeCorrect = True
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    PolygonComponent pair2_fix
      fillColor [set every repeat] = black
      lineColor [set every repeat] = white
      lineWidth = fix_line_width
      shape = circle
      size = fix_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine setup_trials
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    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Routine:
        chosen_pair = curr_trial_list[trial_num]
        chosen_1back = curr_1back_list[trial_num]

        # get pair 1 and pair 2 fractals
        pair1_stim = chosen_pair[0]
        pair1_1back = chosen_1back[0]
        pair2_stim = chosen_pair[1]
        pair2_1back = chosen_1back[1]
      End Routine:
        thisExp.addData('trial_num', trial_num)
        trial_num = trial_num + 1
  Routine trial_A_1back
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    CodeComponent var_1back_code_A
      Code Type = Auto->JS
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      Begin Routine:
        # Generate a random value (0 or 1) based on the probability
        is_nback_trial_A = random.choices([0, 1], weights=[1 - prob_of_nback, prob_of_nback])[0] == 1

        if is_nback_trial_A:
            print(is_nback_trial_A)
            print("nback")
            thisExp.addData('A_1back', ('stim_' + A_stim))
            thisExp.addData('trial_count_A_1back', trial_count_AB)
            trial_count_AB += 1
            correct_ans_A = "space"
        else:
           print(is_nback_trial_A)
           print("not an nback")
           correct_ans_A = "None"
           continueRoutine=False
      End Routine:
        if (A_1back_resp.keys == "space" and correct_ans_A == "space") or (A_1back_resp.keys == None and correct_ans_A == "None"):
            thisExp.addData("A_1back_accuracy", 1)
        else:
            thisExp.addData("A_1back_accuracy", 0)
    TextComponent A_1back_pre_fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent A_1back_image
      image [set every repeat] = $'images/stim_' + A_stim + '.png'
      size = image_size
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    KeyboardComponent A_1back_resp
      allowedKeys [set every repeat] = 'space','None'
      correctAns = $correct_ans_A
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      storeCorrect = True
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  Routine trial_B_1back
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    CodeComponent var_1back_code_B
      Code Type = Auto->JS
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      Begin Routine:
        # Generate a random value (0 or 1) based on the probability
        is_nback_trial_B = random.choices([0, 1], weights=[1 - prob_of_nback, prob_of_nback])[0] == 1

        if is_nback_trial_B:
            print(is_nback_trial_B)
            print("nback")
            thisExp.addData('B_1back', ('stim_' + B_stim))
            thisExp.addData('trial_count_B_1back', trial_count_AB)
            trial_count_AB += 1
            correct_ans_B = "space"
        else:
           print(is_nback_trial_B)
           print("not nback")
           correct_ans_B = "None"
           continueRoutine=False
      End Routine:
        if (B_1back_resp.keys == "space" and correct_ans_B == "space") or (B_1back_resp.keys == None and correct_ans_B == "None"):
            thisExp.addData("B_1back_accuracy", 1)
        else:
            thisExp.addData("B_1back_accuracy", 0)
    TextComponent B_1back_pre_fix
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    ImageComponent B_1back_image
      image [set every repeat] = $'images/stim_' + B_stim + '.png'
      size = image_size
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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    KeyboardComponent B_1back_resp
      allowedKeys [set every repeat] = 'space','None'
      correctAns = $correct_ans_B
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      storeCorrect = True
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  Routine setup_block
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    CodeComponent block_code
      Code Type = Auto->JS
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      Begin Experiment:
        index_AB = shuffle_without_doubles(num_groups, num_rep)
        index_BC = shuffle_without_doubles(num_groups, num_rep)
        index_CD = shuffle_without_doubles(num_groups, num_rep)

        index_AB_array = np.array(index_AB)
        index_BC_array = np.array(index_BC)
        index_CD_array = np.array(index_CD)

        trial_list_AB = [AB_pairs[i] for i in index_AB]
        trial_list_BC = [BC_pairs[i] for i in index_BC]
        trial_list_CD = [CD_pairs[i] for i in index_CD]

        oneback_list_AB = np.zeros_like(trial_list_AB)
        oneback_list_BC = np.zeros_like(trial_list_BC)
        oneback_list_CD = np.zeros_like(trial_list_CD)
        for i in range(num_groups):
          bool_AB = index_AB_array == i
          bool_BC = index_BC_array == i
          bool_CD = index_CD_array == i

          idx_AB = np.where(bool_AB)[0]
          idx_BC = np.where(bool_BC)[0]
          idx_CD = np.where(bool_CD)[0]

          oneback_list_AB[idx_AB] = [0,0]
          oneback_list_BC[idx_BC] = [0,0]
          oneback_list_CD[idx_CD] = [0,0]

          oneback_AB = random.sample(idx_AB.tolist(), num_1backs_each_pair)
          oneback_BC = random.sample(idx_BC.tolist(), num_1backs_each_pair)
          oneback_CD = random.sample(idx_CD.tolist(), num_1backs_each_pair)

          oneback_pair_idx = int(num_1backs_each_pair/2)
          oneback_list_AB[oneback_AB[0:oneback_pair_idx]] = p1_1back
          oneback_list_AB[oneback_AB[oneback_pair_idx:]] = p2_1back
          oneback_list_BC[oneback_BC[0:oneback_pair_idx]] = p1_1back
          oneback_list_BC[oneback_BC[oneback_pair_idx:]] = p2_1back
          oneback_list_CD[oneback_CD[0:oneback_pair_idx]] = p1_1back
          oneback_list_CD[oneback_CD[oneback_pair_idx:]] = p2_1back


        if exposure_cond == 1:
            trial_list = [trial_list_AB, trial_list_BC, trial_list_CD]
            trial_list_1back = [oneback_list_AB, oneback_list_BC, oneback_list_CD]
        elif exposure_cond == 2:
            trial_list = [trial_list_AB, trial_list_CD, trial_list_BC]
            trial_list_1back = [oneback_list_AB, oneback_list_CD, oneback_list_BC]
      Begin Routine:
        curr_trial_list = trial_list[exposure_loop.thisN]
        curr_1back_list = trial_list_1back[exposure_loop.thisN]

        trial_count = 0
        trial_num = 0
        trial_count_1back = 0
    PolygonComponent init_fix
      fillColor = black
      lineWidth = fix_line_width
      shape = circle
      size = fix_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine between_blocks_break
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    TextComponent text_countdown
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every frame] = $str(10-int(t))
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  Routine test_trial
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    CodeComponent testing_code
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
        key_press = False
        framefinish = np.nan
        random.shuffle(time_idx)

        target_time_data = time_names[time_idx[0]]
        target_times = times[time_idx[0]]
        targ1_time = target_times[0]
        targ2_time = target_times[1]


        foil_time_data = time_names[time_idx[1]]
        foil_times = times[time_idx[1]]
        foil1_time = foil_times[0]
        foil2_time = foil_times[1]
        print('testing_loop.thisN:', testing_loop.thisN)

        print("index_pair_test",index_pair_test)
        # get current group index (0, 1, or 2) for A-B, B-C, or C-D testing
        group_index = index_pair_test[testing_loop.thisN]
        print('group_index:', group_index)
        # current trial for given group (range from 0 to 5)
        trial_index = test_trial_count[group_index]
        print('trial_index:', trial_index)
        #
        targ_pair_list = test_pair_index[group_index]
        foil_pair_list = test_foil_index[group_index]
        print('targ_pair_list:', targ_pair_list)
        # get the pairs for the current trial
        targ_pair_idx = targ_pair_list[trial_index]
        foil_pair_idx = foil_pair_list[trial_index]

        #
        group_stim_list = stim_pair_list[group_index]
        group_name = stim_list_names[group_index]
        target_stims = group_stim_list[targ_pair_idx]
        foil_stims = group_stim_list[foil_pair_idx]

        targ_pair1 = target_stims[0]
        targ_pair2 = target_stims[1]

        foil_pair1 = target_stims[0]
        foil_pair2 = foil_stims[1]
      End Routine:
        # store correct answer
        if key_resp_2afc.keys == target_time_data:
            print("target")
            corr_ans = 1
        else:
            print("foil")
            corr_ans = 0
        thisExp.addData('group_kind',group_name)
        thisExp.addData('targ_pos',target_time_data)
        thisExp.addData('foil_pos',foil_time_data)
        thisExp.addData('targ_pair1',('stim_' + targ_pair1))
        thisExp.addData('targ_pair2',('stim_' + targ_pair2))
        thisExp.addData('foil_pair1',('stim_' + foil_pair1))
        thisExp.addData('foil_pair2',('stim_' + foil_pair2))
        thisExp.addData('test_acc',corr_ans)
        #print(key_resp_2afc.keys)
        test_trial_count[group_index] += 1
        win.mouseVisible = False
        print("testing_loop.thisN == loopN - 1",testing_loop.thisN == loopN - 1)
        print("loopN - 1",loopN - 1)

        if testing_loop.thisN == loopN - 1:
            testing_loop.finished = True
    ImageComponent target_1
      image [set during: test_trial.ISI_load_images] = $'images/stim_' + targ_pair1 + '.png'
      size = image_size
      startVal [time (s)] = targ1_time
      stopVal [duration (s)] = view_time
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    StaticComponent ISI_load_images
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    ImageComponent target_2
      image [set during: test_trial.ISI_load_images] = $'images/stim_' + targ_pair2 + '.png'
      size = image_size
      startVal [time (s)] = targ2_time
      stopVal [duration (s)] = view_time
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    ImageComponent foil_1
      image [set during: test_trial.ISI_load_images] = $'images/stim_' + foil_pair1 + '.png'
      size = image_size
      startVal [time (s)] = foil1_time
      stopVal [duration (s)] = view_time
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    ImageComponent foil_2
      image [set during: test_trial.ISI_load_images] = $'images/stim_' + foil_pair2 + '.png'
      size = image_size
      startVal [time (s)] = foil2_time
      stopVal [duration (s)] = view_time
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    KeyboardComponent key_resp_2afc
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $target_time_data
      forceEndRoutine = True
      startVal [time (s)] = 4.5
      storeCorrect = True
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    PolygonComponent fixation_2afc
      fillColor = black
      lineWidth = fix_line_width
      shape = circle
      size = fix_size
      startVal [time (s)] = 0.0
      units = height
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  Routine test
    RoutineSettingsComponent test
      disabled = True
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    ResourceManagerComponent resources
      actionType = Start and Check
      checkAll = False
      forceEndRoutine = False
      resources = []
      startVal [time (s)] = 0
  Routine base_pair_instructions
    RoutineSettingsComponent base_pair_instructions
      disabled = True
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    CodeComponent base_pair_test_code
      Code Type = Auto->JS
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      Begin Routine:
        stim_pair_list = [AB_pairs, BC_pairs, CD_pairs]
        stim_list_names = ["AB","BC","CD"]
        AB_pair_idx = random.sample(list(range(6)),6)
        BC_pair_idx = random.sample(list(range(6)),6)
        CD_pair_idx = random.sample(list(range(6)),6)

        AB_foil_idx = make_unique_list(AB_pair_idx)
        BC_foil_idx = make_unique_list(BC_pair_idx)
        CD_foil_idx = make_unique_list(CD_pair_idx)

        test_pair_index = [AB_pair_idx, BC_pair_idx, CD_pair_idx]
        test_foil_index = [AB_foil_idx, BC_foil_idx, CD_foil_idx]

        num_group_pairs = [6,6,6]
        test_trial_count = [0,0,0]

        decision_time = 3
        test_size = [0.2, 0.2]
        left = [[-.375, 0],[-0.5,0],[-0.25,0]]
        right = [[.375, 0],[0.25,0],[0.5,0]]
        positions = [left,right]
        pos_names = ["left","right"]
        pos_idx = [0,1]

        # Create the indices based on counts
        index_pair_test = [i for i, count in enumerate(num_group_pairs) for _ in range(count)]

        # Shuffle the indices to randomize
        random.shuffle(index_pair_test)
        test_trial_count = test_trial_count
    TextComponent base_pair_instruct
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    KeyboardComponent base_pair_test_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine finished
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    TextComponent thank_you
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank you for your participation!
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    KeyboardComponent end_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test_instructions
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    CodeComponent test_inst_code
      Code Type = Auto->JS
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      Begin Routine:
        # define testing parameters
        view_time = .5
        test_size = [0.2, 0.2]
        time_names = ["left","right"]
        time_idx = [0,1]
        times = [[0.5,1.5],[3,4]]
        num_group_pairs = []
        num_tests = num_groups*2
    TextComponent test_instruct
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this part of experiment you will see two pairs of images presented on the screen for a short period of time.
        After seeing the 2 pairs, please judge which pair looks more familiar to you.
        By familiar it means which pair you have seen more often in the first part of the experiment.
        If the first pair looks more familiar, press the left arrow key.
        If the second pair looks more familiar, press the right arrow key.
        You must make a decision for the next pairs to appear.
        Press space bar to start.
    KeyboardComponent test_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pair1_1back
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    CodeComponent pair1_1back_code
      Code Type = Py
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      Begin Routine:
        # Generate a random value (0 or 1) based on the probability
        is_nback_trial_A = pair1_1back == '1'
        space_press = False
        if is_nback_trial_A:
           correct_ans_p1 = "space"
        else:
           correct_ans_p1 = "None"
           continueRoutine=False
      Each Frame:
        if (pair1_1back_resp.keys == "space") & (pair1_1back_resp.status == STARTED):
            if not space_press:
                space_press = True
                space_press = t
                pair1_1back_fix.fillColor = "white"
                pair1_1back_fix.lineColor = "black"
            else:
                space_press = t
        elif (pair1_1back_resp.keys == []) & (pair1_1back_resp.status == FINISHED):
            pair1_1back_fix.fillColor = "red"
            pair1_1back_fix.lineColor = "white"

        if space_press and t - space_press > .15:
            space_press = False
            pair1_1back_fix.fillColor = "black"
            pair1_1back_fix.lineColor = "white"
      End Routine:
        if correct_ans_p1 == "space":
            thisExp.addData('1back', ('stim_' + pair1_stim))
            thisExp.addData('trial_1backcount_pair1_1back', trial_count_1back)
            trial_count_1back += 1
            if pair1_1back_resp.keys == "space":
                thisExp.addData("1back_accuracy", 1)
            elif pair1_1back_resp.keys == []:
                thisExp.addData("1back_accuracy", 0)
    ImageComponent pair1_1back_image
      image [set every repeat] = $'images/stim_' + pair1_stim + '.png'
      size = image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent pair1_1back_resp
      allowedKeys [set every repeat] = 'space','None'
      correctAns = $correct_ans_p1
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.75
      storeCorrect = True
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    PolygonComponent pair1_1back_fix
      fillColor [set every repeat] = black
      lineColor [set every repeat] = white
      lineWidth = fix_line_width
      shape = circle
      size = fix_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine pair2_1back
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    CodeComponent pair2_1back_code
      Code Type = Auto->JS
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      Begin Routine:
        # Generate a random value (0 or 1) based on the probability
        is_nback_trial_B = pair2_1back == '1'
        space_press = False
        if is_nback_trial_B:
            correct_ans_p2 = "space"
        else:
           correct_ans_p2 = "None"
           continueRoutine=False
      Each Frame:
        if (pair2_1back_resp.keys == "space") & (pair2_1back_resp.status == STARTED):
            if not space_press:
                space_press = True
                space_press = t
                pair2_1back_fix.fillColor = "white"
                pair2_1back_fix.lineColor = "black"
            else:
                space_press = t
        elif (pair2_1back_resp.keys == []) & (pair2_1back_resp.status == FINISHED):
            pair2_1back_fix.fillColor = "red"
            pair2_1back_fix.lineColor = "white"

        if space_press and t - space_press > .15:
            space_press = False
            pair2_1back_fix.fillColor = "black"
            pair2_1back_fix.lineColor = "white"
      End Routine:
        #if (pair2_1back_resp.keys == "space" and correct_ans_p2 == "space") or (pair2_1back_resp.keys == [] and correct_ans_p2 == "None"):
        #    #thisExp.addData("1back_accuracy", 1)
        #    thisExp.addData('pair2_1back', ('stim_' + pair2_stim))
        #    thisExp.addData('trial_1backcount_pair2_1back', trial_count_1back)
        #    trial_count_1back += 1
        #else:
        #    thisExp.addData("1back_accuracy", 0)
        if correct_ans_p2 == "space":
            thisExp.addData('1back', ('stim_' + pair2_stim))
            thisExp.addData('trial_1backcount_pair2_1back', trial_count_1back)
            trial_count_1back += 1
            if pair2_1back_resp.keys == "space":
                thisExp.addData("1back_accuracy", 1)
            elif pair2_1back_resp.keys == []:
                thisExp.addData("1back_accuracy", 0)
    ImageComponent pair2_1back_image
      image [set every repeat] = $'images/stim_' + pair2_stim + '.png'
      size = image_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent pair2_1back_resp
      allowedKeys [set every repeat] = 'space','None'
      correctAns = $correct_ans_p1
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.75
      storeCorrect = True
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    PolygonComponent pair2_1back_fix
      fillColor [set every repeat] = black
      lineColor [set every repeat] = white
      lineWidth = fix_line_width
      shape = circle
      size = fix_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine testing_block_setup
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    CodeComponent test_code_2
      Code Type = Auto->JS
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      Begin Routine:
        # if current iteration is the second block, test direct pairs
        if testing_blocks.thisN == 1:
            stim_pair_list = [AB_pairs, BC_pairs, CD_pairs]
            stim_list_names = ["AB","BC","CD"]

            AB_pair_idx = random.sample(list(range(num_groups)),num_groups)
            BC_pair_idx = random.sample(list(range(num_groups)),num_groups)
            CD_pair_idx = random.sample(list(range(num_groups)),num_groups)

            AB_foil_idx = make_unique_list(AB_pair_idx)
            BC_foil_idx = make_unique_list(BC_pair_idx)
            CD_foil_idx = make_unique_list(CD_pair_idx)

            test_pair_index = [AB_pair_idx, BC_pair_idx, CD_pair_idx]
            test_foil_index = [AB_foil_idx, BC_foil_idx, CD_foil_idx]

            num_group_pairs = [num_groups,num_groups,num_groups]
            loopN = sum(num_group_pairs)
            test_trial_count = [0,0,0]
        elif testing_blocks.thisN == 0:
            print("testing_blocks.thisN == 1")
            print("test_cond == 1:", test_cond == 1)
            print("test_cond == 2:", test_cond == 2)
            if test_cond == 1:
                print("test_cond == 1")
                stim_pair_list = [AC_pairs, BD_pairs]
                stim_list_names = ["AC","BD"]
                AC_pair_idx = random.sample(list(range(num_groups)),num_groups)
                BD_pair_idx = random.sample(list(range(num_groups)),num_groups)

                AC_foil_idx = make_unique_list(AC_pair_idx)
                BD_foil_idx = make_unique_list(BD_pair_idx)

                test_pair_index = [AC_pair_idx, BD_pair_idx]
                test_foil_index = [AC_foil_idx, BD_foil_idx]

                num_group_pairs = [num_groups,num_groups]
                loopN = sum(num_group_pairs)
                test_trial_count = [0,0]

            elif test_cond == 2:
                print("test_cond == 2")
                stim_pair_list = [AD_pairs]
                stim_list_names = ["AD"]

                AD_pair_idx = random.sample(list(range(num_groups)),num_groups)

                AD_foil_idx = make_unique_list(AD_pair_idx)

                test_pair_index = [AD_pair_idx]
                test_foil_index = [AD_foil_idx]

                num_group_pairs = [num_groups]
                loopN = sum(num_group_pairs)
                test_trial_count = [0]


        # Create the indices based on counts
        index_pair_test = [i for i, count in enumerate(num_group_pairs) for _ in range(count)]

        # Shuffle the indices to randomize
        random.shuffle(index_pair_test)
        print("index_pair_test", index_pair_test)
Flow
  Routine instructions
  LoopInitiator exposure_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine setup_block
    LoopInitiator blocks loopType="TrialHandler"
      loopType = random
      nReps = num_loop_rep
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      Routine setup_trials
      Routine pair1_disp
      Routine pair1_1back
      Routine pair2_disp
      Routine pair2_1back
    LoopTerminator blocks
    Routine between_blocks_break
  LoopTerminator exposure_loop
  Routine test_instructions
  LoopInitiator testing_blocks loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    LoopInitiator testing_loop_rep loopType="TrialHandler"
      loopType = sequential
      nReps = 2
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      Routine testing_block_setup
      LoopInitiator testing_loop loopType="TrialHandler"
        loopType = sequential
        nReps = 999
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        Routine test_trial
        Routine fix
      LoopTerminator testing_loop
    LoopTerminator testing_loop_rep
    Routine between_blocks_break
  LoopTerminator testing_blocks
  Routine finished
